PsychoPy2experiment version="2022.2.3"
Settings
  Experiment info = {'participant': '', 'condition': '', 'output folder': 'Results/'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2022.2.3
  Window size (pixels) = [400, 300]
  expName = scheduler
  keyboardBackend = ioHub
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Routines
  Routine end
    TextComponent end_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have reached the end of the experiment. Thank you!

        Press SPACE to end.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practice_end
    TextComponent text_7
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have finished the practice trials. If you have any questions, please ask your experimenter now.

        Next, you will begin the real trials. These will be exactly the same, except you will no longer receive feedback.

        When you are ready, press SPACE to begin.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        timer = core.CountdownTimer(duration)
  Routine stroop_trial
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if color == "red":
            corr_ans = "r"
        elif color == "green":
            corr_ans = "g"
        else:
            corr_ans = "b"
      Each Frame:
        if timer.getTime() < 0:
            continueRoutine=False
            stroop_trials.finished=True
    TextComponent trial_text
      color [set every repeat] = $color
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys = 'r','g','b'
      correctAns = $corr_ans
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ParallelOutComponent p_port_x_send_2
      address = 0x3FF8
      disabled = True
      register = EIO
      startData = start_trigger
      startVal [time (s)] = 0
      stopData = end_trigger
      stopVal [condition] = len(key_resp.keys)
      syncScreen = True
      syncScreenRefresh = False
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  Routine math_trial
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        math_correct = 0
      Begin Routine:
        num1 = randint(1,11)
        num2 = randint(1,11)

        if trial_sign == "addition":
            sign = "+"
            corr_ans_math = num1 + num2
        elif trial_sign == "subtraction":
            sign = "-"
            corr_ans_math = num1 - num2
        elif trial_sign == "division":
            sign = "/"
            corr_ans_math = num1 / num2
        else:
            sign = "x"
            corr_ans_math = num1 * num2
        math_kb = keyboard.Keyboard()
        response_rt = 0
      Each Frame:
        math_keys = math_kb.getKeys()
        valid_keys = ['1','2','3','4',
        '5','6','7','8','9','0','minus', 'return']
        for thisKey in math_keys:
            if thisKey.name == 'escape':
                core.quit()
            if thisKey.name not in valid_keys:
                textbox.text = ''
            elif (textbox.text != '') and (thisKey.name == 'return'):
                response_rt = thisKey.rt
                continueRoutine = False
      End Routine:
        answer = float(textbox.text)

        if answer == corr_ans_math:
            math_correct = 1
        else:
            math_correct = 0

        thisExp.addData('corr_ans_math', corr_ans_math)
        thisExp.addData('math_correct', math_correct)
        thisExp.addData('response_rt', response_rt)
    TextComponent text
      letterHeight = 0.05
      pos = (-.25, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $num1
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    TextComponent text_2
      letterHeight = 0.05
      pos = (.25, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $num2
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    TextComponent text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $sign
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0, -.25)
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
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    ParallelOutComponent p_port_x_send_4
      address = 0x3FF8
      register = EIO
      startData = start_trigger
      startVal [time (s)] = 0
      stopData = end_trigger
      stopVal [condition] = not continueRoutine
      syncScreen = True
      syncScreenRefresh = False
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  Routine stroop_practice
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if color == "red":
            corr_ans = "r"
        elif color == "green":
            corr_ans = "g"
        else:
            corr_ans = "b"
    TextComponent stroop_practice_text
      color [set every repeat] = $color
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $word
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    KeyboardComponent key_resp_stroop_prac
      allowedKeys = 'r','g','b'
      correctAns = $corr_ans
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ParallelOutComponent p_port_x_send
      address = 0x3FF8
      disabled = True
      register = EIO
      startData = start_trigger
      startVal [time (s)] = 0
      stopData = end_trigger
      stopVal [condition] = len(key_resp_stroop_prac.keys)
      syncScreen = True
      syncScreenRefresh = False
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  Routine stroop_feedback
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        msg = ""
      Begin Routine:
        if key_resp_stroop_prac.corr == 1:
            msg = "Correct!"
        elif color == "red":
            msg = "That was incorrect. The color was red, so you should have pressed the R key."
        elif color == "green":
            msg = "That was incorrect. The color was green, so you should have pressed the G key."
        else:
            msg = "That was incorrect. The color was blue, so you should have pressed the B key."
    TextComponent feedback_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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    TextComponent text_5
      letterHeight = 0.05
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine stroop_instructions
    TextComponent stroop_instruct_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Your instructions go here.

        During the trial, you will see a word in the center of the screen. Your job is to indicate the color that word is printed in by pressing the corresponding key.

        If the color of the word is RED, press the R key.
        If the color of the word is GREEN, press the G key.
        If the color of the word is BLUE, press the B key.

        Press SPACE to begin the practice.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine math_practice
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        math_correct = 0
      Begin Routine:
        num1 = randint(1,11)
        num2 = randint(1,11)

        if trial_sign == "addition":
            sign = "+"
            corr_ans_math = num1 + num2
        elif trial_sign == "subtraction":
            sign = "-"
            corr_ans_math = num1 - num2
        elif trial_sign == "division":
            sign = "/"
            corr_ans_math = num1 / num2
        else:
            sign = "x"
            corr_ans_math = num1 * num2
        math_kb = keyboard.Keyboard()
        response_rt = 0
      Each Frame:
        math_keys = math_kb.getKeys()
        valid_keys = ['1','2','3','4',
        '5','6','7','8','9','0','minus', 'return']
        for thisKey in math_keys:
            if thisKey.name == 'escape':
                core.quit()
            if thisKey.name not in valid_keys:
                textbox_2.text = ''
            elif (textbox_2.text != '') and (thisKey.name == 'return'):
                response_rt = thisKey.rt
                continueRoutine = False
      End Routine:
        answer = int(textbox_2.text)

        print(f"Submitted: {answer}, {type(answer)}")
        print(f"Correct: {corr_ans_math}, {type(corr_ans_math)}")

        if int(answer) == int(corr_ans_math):
            math_correct = 1
        else:
            math_correct = 0

        thisExp.addData('corr_ans_math', corr_ans_math)
        thisExp.addData('math_correct', math_correct)
        thisExp.addData('response_rt', response_rt)
    TextComponent text_4
      letterHeight = 0.05
      pos = (-.25, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $num1
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    TextComponent text_6
      letterHeight = 0.05
      pos = (.25, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $num2
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    TextComponent text_8
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $sign
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    TextboxComponent textbox_2
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0, -.25)
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
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    ParallelOutComponent p_port_x_send_3
      address = 0x3FF8
      disabled = True
      register = EIO
      startData = start_trigger
      startVal [time (s)] = 0
      stopData = end_trigger
      stopVal [condition] = (textbox_2.text != '') and (thisKey.name == 'return')
      syncScreen = True
      syncScreenRefresh = False
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  Routine math_feedback
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        msg = ""
      Begin Routine:
        if math_correct == 1:
            msg = "Correct!"
        else:
            msg = "That was incorrect. The correct answer was {}.".format(corr_ans_math)
    TextComponent feedback_text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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    TextComponent text_9
      letterHeight = 0.05
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine setup
    CodeComponent code_setup
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy.hardware import keyboard
        from psychopy import core
        exp_condition = expInfo['condition']
    ParallelOutComponent p_port
      address = 0x3FF8
      disabled = True
      register = EIO
      startData = 1
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 1.0
      syncScreen = True
      syncScreenRefresh = False
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  Routine print_row
    TextComponent text_instr
      letterHeight = 0.04
      pos = (-0.3, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = Test + $experiment_conditions
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    MouseComponent mouse
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine parse_scheduler_row
    CodeComponent code_7
      Code Type = Py
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      Before Experiment:
        import ast
      Begin Routine:
        task_parameters = ast.literal_eval(task_parameters)
Flow
  Routine setup
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = block_scheduler.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'task_name': 'Math', 'duration': 360, 'task_type': 'math', 'task_parameters': "{'filename': 'math-', 'max_value': 40}", 'start_trigger': 110, 'end_trigger': 111},
      {'task_name': 'Recovery 1', 'duration': 360, 'task_type': 'wait', 'task_parameters': None, 'start_trigger': 112, 'end_trigger': 113},
      {'task_name': 'Stroop Englich', 'duration': 10, 'task_type': 'stroop', 'task_parameters': "{'filename': 'stroop-eng-'}", 'start_trigger': 114, 'end_trigger': 115},
      {'task_name': 'Recovery 1', 'duration': 360, 'task_type': 'wait', 'task_parameters': None, 'start_trigger': 116, 'end_trigger': 117}]
    Routine parse_scheduler_row
    LoopInitiator stroop loopType="TrialHandler"
      loopType = random
      nReps = sum([task_type=='stroop'])
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      Routine stroop_instructions
      LoopInitiator stroop_trials_practice loopType="TrialHandler"
        conditionsFile = stroop_stim.csv
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('word', 'RED'), ('color', 'red'), ('congruency', 'congruent')]),
          OrderedDict([('word', 'GREEN'), ('color', 'red'), ('congruency', 'incongruent')]),
          OrderedDict([('word', 'BLUE'), ('color', 'red'), ('congruency', 'incongruent')]),
          OrderedDict([('word', 'RED'), ('color', 'green'), ('congruency', 'incongruent')]),
          OrderedDict([('word', 'GREEN'), ('color', 'green'), ('congruency', 'congruent')]),
          OrderedDict([('word', 'BLUE'), ('color', 'green'), ('congruency', 'incongruent')]),
          OrderedDict([('word', 'RED'), ('color', 'blue'), ('congruency', 'incongruent')]),
          OrderedDict([('word', 'GREEN'), ('color', 'blue'), ('congruency', 'incongruent')]),
          OrderedDict([('word', 'BLUE'), ('color', 'blue'), ('congruency', 'congruent')])]
        Routine stroop_practice
        Routine stroop_feedback
      LoopTerminator stroop_trials_practice
      Routine practice_end
      LoopInitiator stroop_trials loopType="TrialHandler"
        conditionsFile = stroop_stim.csv
        loopType = random
        nReps = 1000
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        conditions:
          [OrderedDict([('word', 'RED'), ('color', 'red'), ('congruency', 'congruent')]),
          OrderedDict([('word', 'GREEN'), ('color', 'red'), ('congruency', 'incongruent')]),
          OrderedDict([('word', 'BLUE'), ('color', 'red'), ('congruency', 'incongruent')]),
          OrderedDict([('word', 'RED'), ('color', 'green'), ('congruency', 'incongruent')]),
          OrderedDict([('word', 'GREEN'), ('color', 'green'), ('congruency', 'congruent')]),
          OrderedDict([('word', 'BLUE'), ('color', 'green'), ('congruency', 'incongruent')]),
          OrderedDict([('word', 'RED'), ('color', 'blue'), ('congruency', 'incongruent')]),
          OrderedDict([('word', 'GREEN'), ('color', 'blue'), ('congruency', 'incongruent')]),
          OrderedDict([('word', 'BLUE'), ('color', 'blue'), ('congruency', 'congruent')])]
        Routine stroop_trial
      LoopTerminator stroop_trials
    LoopTerminator stroop
    LoopInitiator math loopType="TrialHandler"
      loopType = random
      nReps = sum([task_type=='math'])
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      LoopInitiator math_trials_practice loopType="TrialHandler"
        conditionsFile = math_stim.csv
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('trial_sign', 'addition')]),
          OrderedDict([('trial_sign', 'subtraction')]),
          OrderedDict([('trial_sign', 'division')]),
          OrderedDict([('trial_sign', 'multiplication')])]
        Routine math_practice
        Routine math_feedback
      LoopTerminator math_trials_practice
      LoopInitiator math_trials loopType="TrialHandler"
        conditionsFile = math_stim.csv
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('trial_sign', 'addition')]),
          OrderedDict([('trial_sign', 'subtraction')]),
          OrderedDict([('trial_sign', 'division')]),
          OrderedDict([('trial_sign', 'multiplication')])]
        Routine math_trial
      LoopTerminator math_trials
    LoopTerminator math
  LoopTerminator trials
  Routine end
